PsychoPy2experiment version="2026.2.3"
Settings
  Data filename = 'data/' + expInfo['participant'] + '_' + expName + '_' + expInfo['date']
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1280, 720]
  color = #4d4d4d
  colorSpace = hex
  expName = stroop
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine instrucciones
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    TextComponent texto_instrucciones
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      wrapWidth = 1.4
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      text:
        TAREA STROOP

        Va a aparecer una palabra escrita en un color.
        Respondé el COLOR DEL TEXTO, no la palabra.

        A = azul      N = naranja      B = blanco

        Respondé lo más rápido que puedas sin equivocarte.

        Apretá la barra espaciadora para empezar.
    KeyboardComponent tecla_instrucciones
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine trial
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    TextComponent fijacion
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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    TextComponent palabra
      color [set every repeat] = $ink_colour
      colorSpace = hex
      letterHeight = 0.12
      startVal [time (s)] = 0.5
      text [set every repeat] = $word
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    KeyboardComponent respuesta
      allowedKeys = 'a','n','b'
      correctAns = $correct_key
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      store = first key
      storeCorrect = True
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  Routine despedida
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    TextComponent texto_despedida
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text = ¡Listo, gracias!
      wrapWidth = 1.4
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Flow
  Routine instrucciones
  LoopInitiator trials loopType="TrialHandler"
    conditions = []
    conditionsFile = condiciones.csv
    loopType = random
    nReps = 4
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    Routine trial
  LoopTerminator trials
  Routine despedida
