PsychoPy2experiment version="2026.2.3"
Settings
  Data filename = 'data/' + expInfo['participant'] + '_' + expName + '_' + expInfo['date']
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1280, 720]
  color = #4d4d4d
  colorSpace = hex
  expName = precarga
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine instrucciones
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    TextComponent texto_instrucciones
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      wrapWidth = 1.4
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      text:
        AGUDO O GRAVE

        En cada trial vas a escuchar un tono y ver una flecha.
        Respondé si el TONO es agudo o grave: la flecha no importa.

        Tecla ARRIBA = agudo      Tecla ABAJO = grave

        Apretá la barra espaciadora para empezar.
    KeyboardComponent tecla_instrucciones
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine trial
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    TextComponent fijacion
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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    StaticComponent ISI
      saveData = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    ImageComponent imagen
      image [set during: trial.ISI] = $archivo_imagen
      size = (0.8, 0.6)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 1.0
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    SoundComponent sonido
      forceEndRoutine = False
      sound [set every repeat] = $archivo_sonido
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 0.3
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    KeyboardComponent respuesta
      allowedKeys = 'up','down'
      correctAns = $correct_key
      forceEndRoutine = True
      startVal [time (s)] = 1.0
      store = first key
      storeCorrect = True
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    CodeComponent control_frames
      Code Type = Auto->JS
      Begin Experiment:
        # frame perdido: un intervalo entre flips de más de 1.5 frames
        win.recordFrameIntervals = True
        win.refreshThreshold = 1.5 / (expInfo['frameRate'] or 60)
      Begin Routine:
        perdidos_al_empezar = win.nDroppedFrames
      End Experiment:
        logging.data(f'FRAMES PERDIDOS {win.nDroppedFrames}')
        print(f'Frames perdidos en todo el experimento: {win.nDroppedFrames}')
      End Routine:
        thisExp.addData('frames_perdidos', win.nDroppedFrames - perdidos_al_empezar)
  Routine despedida
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    TextComponent texto_despedida
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text = ¡Listo, gracias!
      wrapWidth = 1.4
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Flow
  Routine instrucciones
  LoopInitiator trials loopType="TrialHandler"
    conditions = []
    conditionsFile = condiciones.csv
    loopType = random
    nReps = 5
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    Routine trial
  LoopTerminator trials
  Routine despedida
