PsychoPy2experiment version="2026.2.3"
Settings
  Data filename = 'data/' + expInfo['participant'] + '_' + expName + '_' + expInfo['date']
  Experiment info = {'participant': '', 'session': '001', 'edad': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1280, 720]
  color = #4d4d4d
  colorSpace = hex
  expName = stroop_final
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine descanso
    CodeComponent codigo_descanso
      Code Type = Auto->JS
      Begin Routine:
        if trials.thisN + 1 != trials.nTotal // 2 or tipo_de_bloque != 'test':
            continueRoutine = False
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    TextComponent texto_descanso
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      wrapWidth = 1.4
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      text:
        Mitad del test. Descansá lo que necesites.

        Barra espaciadora para seguir.
    KeyboardComponent tecla_descanso
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instrucciones
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    TextComponent texto_instrucciones
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      wrapWidth = 1.4
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      text:
        TAREA STROOP

        Va a aparecer una palabra escrita en un color.
        Respondé el COLOR DE LA LETRA, no la palabra.

        A = azul      N = naranja      B = blanco

        Respondé lo más rápido que puedas sin equivocarte.

        Apretá la barra espaciadora para empezar.
    KeyboardComponent tecla_instrucciones
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine inicio_bloque
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    TextComponent texto_inicio_bloque
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      text [set every repeat] = $mensaje_bloque
      wrapWidth = 1.4
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    KeyboardComponent tecla_inicio_bloque
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine trial
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    StaticComponent ISI
      saveData = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    TextComponent fijacion
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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    TextComponent palabra
      color [set during: trial.ISI] = $ink_colour
      colorSpace = hex
      letterHeight = 0.12
      startVal [time (s)] = 0.5
      text [set during: trial.ISI] = $word
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    KeyboardComponent respuesta
      allowedKeys = 'a','n','b'
      correctAns = $correct_key
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      store = first key
      storeCorrect = True
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    CodeComponent marca
      Code Type = Auto->JS
      Begin Experiment:
        def mandar_marca(codigo):
            logging.data(f'TRIGGER {codigo}')
      Begin Routine:
        marca_pendiente = True
      Each Frame:
        if palabra.status == STARTED and marca_pendiente:
            win.callOnFlip(mandar_marca, int(trigger_code))
            marca_pendiente = False
      End Routine:
        thisExp.addData('trigger_code', int(trigger_code))
    CodeComponent control_frames
      Code Type = Auto->JS
      Begin Experiment:
        # frame perdido: un intervalo entre flips de más de 1.5 frames
        win.recordFrameIntervals = True
        win.refreshThreshold = 1.5 / (expInfo['frameRate'] or 60)
      Begin Routine:
        perdidos_al_empezar = win.nDroppedFrames
      End Experiment:
        logging.data(f'FRAMES PERDIDOS {win.nDroppedFrames}')
        print(f'Frames perdidos en todo el experimento: {win.nDroppedFrames}')
      End Routine:
        thisExp.addData('frames_perdidos', win.nDroppedFrames - perdidos_al_empezar)
  Routine feedback
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    CodeComponent codigo_feedback
      Code Type = Auto->JS
      Begin Routine:
        if tipo_de_bloque != 'practica':
            continueRoutine = False

        if respuesta.corr:
            mensaje = 'correcto'
            color_mensaje = '#56B4E9'
            volumen_bip = 0
        else:
            mensaje = 'incorrecto'
            color_mensaje = '#E69F00'
            volumen_bip = 1
    TextComponent texto_feedback
      color [set every repeat] = $color_mensaje
      colorSpace = hex
      letterHeight = 0.06
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.4
      text [set every repeat] = $mensaje
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    SoundComponent bip_error
      forceEndRoutine = False
      sound [set every repeat] = 500
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.2
      volume [set every repeat] = volumen_bip
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  Routine despedida
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    TextComponent texto_despedida
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text = ¡Listo, gracias!
      wrapWidth = 1.4
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Flow
  Routine instrucciones
  LoopInitiator bloques loopType="TrialHandler"
    conditions = []
    conditionsFile = bloques.csv
    loopType = sequential
    nReps = 1
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    Routine inicio_bloque
    LoopInitiator trials loopType="TrialHandler"
      conditions = []
      conditionsFile = $archivo_del_bloque
      loopType = random
      nReps = $repeticiones
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      Routine trial
      Routine feedback
      Routine descanso
    LoopTerminator trials
  LoopTerminator bloques
  Routine despedida
